PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': "['practice', '1', '2', '3']", 'which eye is blue': "['right', 'left']", 'eye tested': "['right', 'left']", 'previous contrast': ''}
  Full-screen window = False
  Monitor = testMonitor
  Resources = ['images/radialEye_blue_00.png', 'images/radialEye_blue_01.png', 'images/radialEye_blue_02.png', 'images/radialEye_blue_03.png', 'images/radialEye_blue_04.png', 'images/radialEye_blue_05.png', 'images/radialEye_blue_06.png', 'images/radialEye_blue_07.png', 'images/radialEye_red_00.png', 'images/radialEye_red_01.png', 'images/radialEye_red_02.png', 'images/radialEye_red_03.png', 'images/radialEye_red_04.png', 'images/radialEye_red_05.png', 'images/radialEye_red_06.png', 'images/radialEye_red_07.png', 'images/bullsEye_blue_00.png', 'images/bullsEye_blue_01.png', 'images/bullsEye_blue_02.png', 'images/bullsEye_blue_03.png', 'images/bullsEye_blue_04.png', 'images/bullsEye_blue_05.png', 'images/bullsEye_blue_06.png', 'images/bullsEye_blue_07.png', 'images/bullsEye_red_00.png', 'images/bullsEye_red_01.png', 'images/bullsEye_red_02.png', 'images/bullsEye_red_03.png', 'images/bullsEye_red_04.png', 'images/bullsEye_red_05.png', 'images/bullsEye_red_06.png', 'images/bullsEye_red_07.png', 'image_list_left_left.csv', 'image_list_left_right.csv', 'image_list_right_left.csv', 'image_list_right_right.csv']
  Screen = 1
  Units = pix
  Window size (pixels) = [1440, 900]
  color = black
  expName = eyeDomExp
  exportHTML = on Save
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Routines
  Routine contWarning
    CodeComponent checkInputCont
      Code Type = Auto->JS
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      Begin Routine:
        #display txt to verify the calculated contrast was properly input
        if expInfo['previous contrast'] =='' and expInfo['session']!='practice':
            txtVar = 'You did not input the correct contrast value.  Please restart the session and input the value you wrote down from the practice session to the last entry of the dialog box'
            continueRoutine = True
        else:
            continueRoutine=False
            txtVar='' #this has to always be defined
    TextComponent warningESC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $txtVar
      units = norm
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  Routine findScreenResol
    CodeComponent JScode
      Code Type = JS
      Begin JS Experiment:
        //make python online friendly
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        shuffle = util.shuffle;
        Array.prototype.append = [].push;
        random=Math.random;
        sort = function(array) {
            return array.sort((a, b) => (a - b));
        }
        randint = function(min, maxplusone) {
          return Math.floor(Math.random() * (maxplusone - min) ) + min;
        }
        range = function (size, startAt = 0) {
            return [...Array(size).keys()].map(i => i + startAt);
        }
        Array.prototype.index = [].indexOf;
        sum = (arr) => arr.reduce((a,b)=>a+b)
        tan = Math.tan;
    CodeComponent pxPerCmCode
      Code Type = Auto->JS
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      Begin Experiment:
        x_pix = 400
        pxPerCm = x_pix/8.56 #8.56 is standard size of credit card width
        pxChange = 1
      Each Frame:
        keys=event.getKeys()
        #calculate the pixels per cm from the actual size of the card
        if len(keys):
            if 'up' in keys:
                x_pix = x_pix + pxChange
            elif 'down' in keys:
                x_pix = x_pix - pxChange
            pxPerCm = x_pix/8.56     # divide num of pixels
                                                   # wide by the size in cm
                                                   # of standard card to get
                                                   # resolution (px/cm)
      End Routine:
        thisExp.addData('px per cm', pxPerCm)
    TextComponent instructTop
      letterHeight = .05
      pos = (0, .7)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Please use a credit card or any card of the same size (drivers license, grocery store membership card, etc.)

        Hold it onto the screen, and adjust the image on screen to match the size of your card.

        (If you don't have access to a real card, you can use a ruler to measure image width to 3.37inch or 85.6mm, or make your best guess!)
    TextComponent instructBottom
      letterHeight = .05
      pos = (0, -.6)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        UP arrow = Bigger
        DOWN arrow = Smaller

        Click “Next” when done
    ImageComponent cardImage
      image = images/bankImage.png
      saveStartStop = False
      size [set every frame] = $(x_pix, x_pix * 0.6265625)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    PolygonComponent line_R_vert
      fillColor = $[1,1,1]
      pos [set every frame] = (x_pix/2, 0)
      shape = regular polygon...
      size [set every frame] = (1, (x_pix * 0.6304906542)+80)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent line_L_vert
      fillColor = $[1,1,1]
      pos [set every frame] = (-x_pix/2, 0)
      shape = regular polygon...
      size [set every frame] = (1, (x_pix * 0.6304906542)+80)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent line_T_horiz
      fillColor = $[1,1,1]
      pos [set every frame] = (0, (x_pix * 0.6304906542)/2)
      shape = regular polygon...
      size [set every frame] = (x_pix +80, 1)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent line_B_horiz
      fillColor = $[1,1,1]
      pos [set every frame] = (0, -(x_pix * 0.6304906542)/2)
      shape = regular polygon...
      size [set every frame] = (x_pix +80, 1)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent nextPoly
      fillColor = $[1,0,0]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos = (.8, -.8)
      shape = rectangle
      size = (0.12, 0.06)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent nextButton
      color = black
      letterHeight = 0.05
      pos = (.8, -.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Next
      units = norm
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    MouseComponent nextMouse
      clickable = nextButton
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine findScreenEdge
    TextComponent instruct
      letterHeight = 0.05
      pos = (0, .7)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Use the left and right arrow keys to move the red vertical line so that it lines up with the blue line.
        You may hold down the arrow key to speed up the movement of the red line

        Once they are aligned click “Next”.
    CodeComponent scrnEdgeCode
      Code Type = Auto->JS
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      Begin Experiment:
        #we want to measure the edge of the screen
        # we will need this measurement for the next task
        # of estimating the blindspot

        screenEdgePx = 0.0
        skip_checkEdge = False
        #set variables for moving the triangle horizontally
        xPos = -300
        posChange = 1
      Each Frame:
        #check for any key press
        keys=event.getKeys()
        #move the cursor in different sizes as you get closer
        #to the target line
        if xPos > -500:
            posChange = 10
        elif (xPos < -500) and (xPos > -610):
            posChange = 5
        else:
            posChange = 3
        #calculate the pixels to move based on keypresses
        if len(keys):
            if 'right' in keys:
                xPos = xPos + posChange
            elif 'left' in keys:
                xPos = xPos - posChange
      End Routine:
        #screenEdgeNorm = slider.getRating()
        screenEdgeNorm = xPos
        #screenEdgePx = 10000*screenEdgeNorm
        screenEdgePx =screenEdgeNorm
        if screenEdgePx <(-300):
            skip_checkEdge = True
            screenEdgeLoop.finished = True

        #thisExp.addData('screenEdgeNorm', screenEdgeNorm)
        thisExp.addData('screenEdgePx', screenEdgePx)
    PolygonComponent line
      fillColor = white
      lineWidth = 5
      nVertices = 3
      pos = (-.7,.01)
      shape = line
      size = (1, 0.05)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent moveTri
      fillColor = red
      lineColor = red
      lineWidth = 3
      nVertices = 3
      ori = 90
      pos [set every frame] = (xPos, 35)
      shape = line
      size = (30,70)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent targetTri
      fillColor = $[-1,-1,1]
      lineColor = $[-1,-1,1]
      lineWidth = 5
      nVertices = 3
      ori = 90
      pos = (-.95, -.01)
      shape = line
      size = (0.05, 0.25)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent nextPoly1
      fillColor = $[1,0,0]
      lineColor = $[-1,-1,-1]
      pos = (0.8, -.8)
      shape = rectangle
      size = (0.12, 0.06)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent nextButton1
      color = black
      letterHeight = 0.05
      pos = (.8, -.8)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every frame] = Next
      units = norm
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    MouseComponent nextMouse1
      clickable = nextButton1
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent text
      letterHeight = 0.05
      pos = (.2, 0)
      startVal [time (s)] = 0.0
      text [set every frame] = $xPos
      units = norm
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  Routine checkScreenEdge
    CodeComponent checkEdgCode
      Code Type = Auto->JS
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      Each Frame:
        if skip_checkEdge==True:
            continueRoutine = False

        # if spacebar is hit locally before moving triangle
        # you get a crash, but if online, you get a screen
        # asking you to align the red arrow to the blue

        # also slider looks like trash locally, but good
        # online which is where it matters
    TextComponent instructPls
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Please move the red line to line up with the blue line before continuing.
    PolygonComponent tryAgainPoly
      fillColor = $[1,0,0]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos = (0.8, -0.8)
      shape = rectangle
      size = (0.15, 0.08)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent tryAgainButton
      color = black
      letterHeight = 0.05
      pos = (.8, -.8)
      startVal [time (s)] = 0.0
      text [set every frame] = Try again
      units = norm
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    MouseComponent tryAgainMouse
      clickable = tryAgainButton
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine startBlindSpot
    CodeComponent setParams
      Code Type = Auto->JS
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      Begin Experiment:
        num_repeat = 3 # how many trials to avg over
        dot2square_dist = 6 # in cm, choose; default was 6cm
        square2center_dist = 9 # in cm right of center, choose; default was 6cm

        desiredVisAngl = 0.029147 # in radians; paper says within 1.67 deg

        # better to choose params here since other code
        # component in findBlindSpot is type "both"
    CodeComponent startBSCode
      Code Type = Auto->JS
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      Begin Experiment:
        loopN = 0
      Begin Routine:
        square_x = pxPerCm * square2center_dist # it is important to have this defined here and not in begin exp where original incorrect pxPerCm will be used
        loopN = 0     # yes need it in both places
        clickedRestart = False
    ImageComponent instruct1
      image = images/instruct1.png
      pos [set every frame] = (0, pxPerCm*3.5)
      size [set every frame] = (pxPerCm*20, pxPerCm*7.09)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    KeyboardComponent startKey
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent squareStart
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos [set every frame] = (square_x, -pxPerCm*3)
      shape = rectangle
      size [set every frame] = (pxPerCm*.6, pxPerCm*.6)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent dotStart
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      nVertices = 20
      pos [set every frame] = (square_x - (pxPerCm * dot2square_dist), -pxPerCm*3)
      shape = regular polygon...
      size [set every frame] = (pxPerCm*.6, pxPerCm*.6)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent tinyDotStart
      fillColor = $[1,1,1]
      nVertices = 10
      pos [set every frame] = (square_x, -pxPerCm*3)
      shape = regular polygon...
      size [set every frame] = (pxPerCm*.1, pxPerCm*.1)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent dumiTrialCount
      color = blue
      letterHeight = 0.07
      pos = (0, -.8)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        $f"0 out of {num_repeat}"
    PolygonComponent dumiRestrtPoly
      fillColor = $[-.3,-.3,-.3]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos = (.7, -.8)
      shape = rectangle
      size = (0.4, 0.14)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent dumiRestrtButt
      letterHeight = 0.05
      pos = (0.7, -0.8)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        click here to start over
        (if you made a mistake)
  Routine findBlindSpot
    CodeComponent blindSpotCode
      Code Type = Both
      Begin Experiment:
        dot_dist_list = []
        dist2screen = 0
      Begin JS Experiment:
        dot_dist_list = [];
        dist2screen = 0;
      Begin JS Routine:
        dot_x = (square_x - (pxPerCm * dot2square_dist));
        square_x = (pxPerCm * square2center_dist);
        loopN += 1;
      Begin Routine:
        dot_x =  square_x - (pxPerCm * dot2square_dist)
        square_x = pxPerCm * square2center_dist # it is important to have this defined here and not in begin exp where original incorrect pxPerCm will be used

        loopN += 1
      Each Frame:
        if dot_x>screenEdgePx:
            dot_x = dot_x-1

        else:
            continueRoutine = False
            inLoop.finished = True
            midLoop.finished = True
      Each JS Frame:
        if ((dot_x > screenEdgePx)) {
            dot_x = (dot_x - 1);
        } else {
            continueRoutine = false;
            inLoop.finished = true;
            midLoop.finished = true;
        }
      End JS Routine:
        dot_dist_list.push((square2center_dist*pxPerCm)-dot_x)
        avg_dot_dist = (sum(dot_dist_list.slice((- num_repeat))) / num_repeat);
        dot_dist_cm = (avg_dot_dist / pxPerCm);
        dist2screen = (dot_dist_cm / 0.24);

        thisExp.addData("num_repeat", num_repeat);
        thisExp.addData("square_x", square_x);
        thisExp.addData("square2center_dist", square2center_dist);
        thisExp.addData("dot2square_dist", dot2square_dist);
        thisExp.addData("dot_dist_list", dot_dist_list);
        thisExp.addData("avg_dot_dist", avg_dot_dist);
        thisExp.addData("dist2screen", dist2screen);
      End Routine:
        dot_dist_list.append((square2center_dist*pxPerCm)-dot_x)
        avg_dot_dist = sum(dot_dist_list[-num_repeat:])/num_repeat # only avg the last n valid rounds
        dot_edge_dist = avg_dot_dist - ((pxPerCm*.6)/2) # need dist to right-most edge of dot, not center
        # note that I haven't implemented this ^ in the js code, b/c the diff is negligible, & if anything the est dist is usually shorter than reality
        dot_dist_cm = dot_edge_dist/pxPerCm
        dist2screen = dot_dist_cm/.24 # the angle between
        # fovea and blind spot in eye is usually around
        # 13.5 degrees (tan(13.5) = .24)

        thisExp.addData('num_repeat', num_repeat)
        thisExp.addData('square_x', square_x)
        thisExp.addData('square2center_dist', square2center_dist)
        thisExp.addData('dot2square_dist', dot2square_dist)
        thisExp.addData('dot_dist_list', dot_dist_list)
        thisExp.addData('avg_dot_dist', avg_dot_dist)
        thisExp.addData('dist2screen', dist2screen)
    PolygonComponent square
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      pos [set every frame] = (square_x, -pxPerCm*3)
      shape = rectangle
      size [set every frame] = (pxPerCm*.6, pxPerCm*.6)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent dot
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      nVertices = 20
      pos [set every frame] = (dot_x, -pxPerCm*3)
      shape = regular polygon...
      size [set every frame] = (pxPerCm*.6, pxPerCm*.6)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent tinyDot
      fillColor = $[1,1,1]
      nVertices = 10
      pos [set every frame] = (square_x, -pxPerCm*3)
      shape = regular polygon...
      size [set every frame] = (pxPerCm*.1, pxPerCm*.1)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent endRound
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent trialCounter
      color = blue
      letterHeight = 0.07
      pos = (0, -.8)
      startVal [time (s)] = 0.0
      units = norm
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      text [set every frame]:
        $f"{loopN} out of {num_repeat}"
    PolygonComponent restartPoly
      fillColor = $[-.3,-.3,-.3]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos = (.7, -.8)
      shape = rectangle
      size = (0.4, 0.14)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent restartText
      letterHeight = 0.05
      pos = (0.7, -0.8)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        click here to start over
        (if you made a mistake)
    MouseComponent restartMouse
      clickable = restartText
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine checkForRestart
    CodeComponent breakLoop
      Code Type = Auto->JS
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      Begin Experiment:
        skipTrials = False
        clickedRestart = False
      Begin Routine:
        if restartMouse.clicked_name:
            if restartMouse.clicked_name[0] =='restartText':
                inLoop.finished = True
                clickedRestart = True

        if loopN ==num_repeat and dot_x>screenEdgePx and clickedRestart == False:
            continueRoutine = False
            inLoop.finished = True
            midLoop.finished = True
            outerLoop.finished = True
            skipTrials = True
  Routine warning
    CodeComponent oopsCode
      Code Type = Auto->JS
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      Each Frame:
        if skipTrials==True:
            continueRoutine = False
    TextComponent instructOops
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
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      text:
        oops! Looks like we ran out of space.

        Try moving a little closer to the screen and click the button to try again.
    PolygonComponent tryAgainPoly1
      fillColor = $[1,0,0]
      lineColor = $[-1,-1,-1]
      lineWidth = 2
      pos = (.8, -.8)
      shape = rectangle
      size = (0.15, 0.08)
      startVal [time (s)] = 0.0
      units = norm
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    TextComponent tryAgainButton1
      color = black
      letterHeight = 0.05
      pos = (0.8, -0.8)
      startVal [time (s)] = 0.0
      text [set every frame] = Try again
      units = norm
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    MouseComponent tryAgainMouse1
      clickable = tryAgainButton1
      forceEndRoutineOnPress = valid click
      saveMouseState = never
      startVal [time (s)] = 0.0
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  Routine goodJob_prepForExp
    TextComponent instruct2
      letterHeight = .05
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 2
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      text:
        Great job!

        ** Please keep this distance from your screen until the very end! **

        You can uncover/open your right eye now.
        Make sure you are wearing the colored glasses, and prepare for the next block.

        Press the spacebar to continue to the main experiment.
    KeyboardComponent keyToMoveOn
      allowedKeys = ['space']
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent calcImgSize_2
      Code Type = Auto->JS
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      Begin Routine:
        imgSizeCm = 2 * dist2screen * tan(.5*desiredVisAngl)
        #set at beginning of routine since this is calculated in prev routines
        constSize=imgSizeCm*pxPerCm
    CodeComponent checkSess
      Code Type = Auto->JS
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      Begin Experiment:
        contrastRange = []
        contR=0.5
        contB=0.5
      Begin Routine:
        #the first session should measure eye dominance and
        #allow for some practice trials of the experiment
        if expInfo['session'] =='practice':
            eyeDom = 1 #run BR to define which eye will be tested
            binRivRun = 0 # skip BR at end of practice exp
            #current numbers will make practice last 2 min tot
            trialReps = 30 #have 10 trials in each block of the actual experiment
            blockReps = 1 # only run 3 blocks
            finalTrialDur =3 #shorten the amount of time between trials
            #contrast variables
            contrastTrials =5 # run contrast 5 times
            contCounter = 1 #dont skip
            skipContrast = 1 #don't skip

        else:
            eyeDom = 0 #skip BR measurement
            binRivRun = 1 # run BR at end of actual exp
            #current numbers will make the  task last ~30min
            trialReps = 30 # have 30 trials in each block ~4-5min
            blockReps = 6
            finalTrialDur =10 #at most 10s
            contrastTrials = 0 #skip contrast
            skipContrast = 0#skip contrast
            contB= expInfo['previous contrast']
            contB= float(contB)
  Routine instContrast
    TextComponent instructions
      letterHeight = 0.04
      pos = (0, .1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Welcome!
        Please wear your glasses throughout the experiment.

        First you will be presented two images side by side. A bull’s eye grating and a radial grating.
        Adjust the contrast of the bull’s eye grating until they are equally as bright.
        You will redo this adjustment 5 times.

        Press any key to continue
    KeyboardComponent key_start
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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    CodeComponent whichCSV
      Code Type = Auto->JS
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      Begin Experiment:
        #make the csv based on user input set this to a
        #variable for easier readability
        fileCSV= 'image_list_'+expInfo['eye tested']+'_'+expInfo['which eye is blue']+'.csv'
    CodeComponent initDriftDir
      Code Type = Auto->JS
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      Begin Experiment:
        nFrames = 7 #how many images to loop through from 0
        #change direction of drift for pre trial
        direction = random() #random number from 0-1
        driftLs =list(range((nFrames+1)*2)) #make  list that is the same size as the csv files and increases by 1
        if direction >0.5:
            driftrows= driftLs[:(nFrames+1)] #grab the first nFrames images
        else:
            driftrows = driftLs[(nFrames+1):] # grab the last nFrames images
      Begin Routine:
        contStrCounter = str(contCounter)
        txtVar = 'You are starting trial ' + contStrCounter + ' of 5 trials'
        #reset contrast every trial
        contB= 0.7
    TextComponent blockCount
      letterHeight = 0.04
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $txtVar
      units = norm
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    TextComponent whichCSV_2
      letterHeight = 0.04
      pos = (0, -.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $fileCSV
      units = norm
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  Routine gratingCode
    CodeComponent changeCont
      Code Type = Auto->JS
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      End Routine:
        #manipulate stim
        if contrastResp.keys == 'up':
            contB +=0.01
            if contB > 1:
                contB=1
        if contrastResp.keys == 'down':
            contB -=0.01
            if contB <=0:
                contB= 0
  Routine bothContrast
    ImageComponent radial_stim_2
      image [set every repeat] = $image_radialEye
      opacity [set every repeat] = contR
      saveStartStop = False
      size = (80,80)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    ImageComponent bulls_stim_2
      image [set every repeat] = $image_bullsEye
      opacity [set every repeat] = contB
      saveStartStop = False
      size = (80,80)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    TextComponent brightInst_2
      letterHeight = 0.03
      pos = (0, .3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        Are the two images equally bright?
        Press ‘Y’ for yes ’N’ for no
    KeyboardComponent key_resp_cont_3
      allowedKeys = 'y','n'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent repeat
      Code Type = Auto->JS
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      End Routine:
        #don't repeat if contrast is the same
        if key_resp_cont_3.keys =='y':
                redoContAdj.finished=True
        else:
            contB=0.7
            contR=1.0
  Routine contrastTrials
    CodeComponent calcCont
      Code Type = Auto->JS
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      Begin Experiment:
        tempCont = 0
      Begin Routine:
        contCounter +=1 #count each trials for display
        contrastRange.append(contB) #make a list of the contrast
        tempCont += contB #temporarily add each contrast for averaging
      End Routine:
        if contCounter ==5:
            contB= tempCont/5 #find average of 5 trials
  Routine finalCont
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        contB= tempCont/5
        txtContB = round(contB,2)
        txtVar = 'Your contrast number is ' + str(txtContB)
        thisExp.addData('contrastRange', contrastRange)
    TextComponent instContNum
      letterHeight = 0.03
      pos = (0, .1)
      startVal [time (s)] = 0.0
      text = Please write down your contrast number. You will input this number in the initial dialog box in all future sessions. Once you record the number press ‘space’ to continue
      units = height
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    TextComponent displayContNum
      letterHeight = 0.03
      pos = (0, -.3)
      startVal [time (s)] = 0.0
      text [set every frame] = $txtContB
      units = height
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    KeyboardComponent key_resp_2
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine gratingContrast
    TextComponent brightInst
      letterHeight = 0.03
      pos = (0, -.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press ‘space’ if brightness is equal
      units = height
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    TextComponent keyPressInst
      letterHeight = 0.03
      pos = (0, .3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = height
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      text:
        Press ‘up’ to increase the brightness of the bull’s eye grating
        Press ‘down’ to decrease the brightness of the bull’s eye grating
    ImageComponent bulls_stim
      image [set every repeat] = $image_bullsEye
      opacity [set every repeat] = contB
      pos [set every repeat] = placeB
      saveStartStop = False
      size = (80,80)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    ImageComponent radial_stim
      image [set every repeat] = $image_radialEye
      opacity [set every repeat] = contR
      pos [set every repeat] = placeR
      saveStartStop = False
      size = (80,80)
      startVal [time (s)] = 0.0
      texture resolution = 512
      units = pix
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    PolygonComponent overlayRadial
      fillColor = black
      lineColor = black
      lineWidth = 0
      opacity [set every repeat] = contB
      pos [set every repeat] = placeR
      saveStartStop = False
      shape = rectangle
      size = (80,80)
      startVal [time (s)] = 0.0
      units = pix
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    KeyboardComponent contrastResp
      allowedKeys = 'up','down','space'
      correctAns = $corr
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    CodeComponent checkDone
      Code Type = Auto->JS
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      Begin Experiment:
        #place the right picture in the proper location
        if expInfo['eye tested'] =='right':
            placeB=(150, 0)
            placeR = (-150, 0)
            labelB = (.2, -.1)
            labelR =(-.2, -.1)
        else:
            placeB=(-150, 0)
            placeR = (150, 0)
            labelB = (-.2, -.1)
            labelR =(.2, -.1)
      End Routine:
        if contrastResp.keys =='space':
            adjustContrast.finished=True
    TextComponent radialLabel
      letterHeight = 0.015
      pos [set every repeat] = labelR
      startVal [time (s)] = 0.0
      text = Radial grating
      units = height
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    TextComponent bullsLabel
      letterHeight = 0.015
      pos [set every repeat] = labelB
      startVal [time (s)] = 0.0
      text = Bull’s eye grating
      units = height
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  Routine binRivInst_sess1
    TextComponent warning_2
      color = red
      letterHeight = 0.05
      pos = (0, .4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      text = STOP: PLEASE READ THE INSTRUCTIONS FOR THIS PART
      units = height
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    TextComponent describeBR
      letterHeight = 0.03
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      units = height
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      text:
        Both gratings will be presented simultaneously. They will both continuously drift (example below). Your task is to report which grating you see at any given time, The grating you perceive will switch back and forth rapidly. Press the appropriate key everytime you notice ONE of the gratings or if you see a mix of the two gratings. Press the key as soon as you notice a change.

        Press ‘left’ if you see the radial grating
        Press ‘right’ if you see the bulls eye grating
        Press ‘down’ if you see a mixture of the two gratings

        Please take a minute to look at the gratings below so you can experience the perceived switching of the gratings before moving onto the actual task

        To begin the task press ‘space’
    KeyboardComponent key_resp_3
      allowedKeys = ['space']
      discard previous = False
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      store = nothing
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    ImageComponent radialEye_2
      image [set every repeat] = $image_radialEye
      opacity [set every repeat] = $contR
      pos = (0, -200)
      saveStartStop = False
      size = (80,80)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      texture resolution = 512
      units = pix
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    ImageComponent bullseye_2
      image [set every repeat] = $image_bullsEye
      opacity [set every repeat] = $contB
      pos = (0, -200)
      saveStartStop = False
      size = (80,80)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      texture resolution = 512
      units = pix
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    CodeComponent params
      Code Type = Auto->JS
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      Begin Routine:
        #set sizes of visual stimuli
        constSize=imgSizeCm*pxPerCm #set the calculated size to a new varibale
        #WARNING: when the images are generated the actual aespect ratio we want
        #is 20 px, but b/c we need background so the opacity is consistent when the image is
        # stretch we will add another 20 px to both images
        minVal =constSize#maximum aspect ratio
        maxVal = constSize+30 #minimum aspect ratio
        #finalize border size
        brd = (constSize+45) + 40 #the max the image can stretch + extra pix to avoid overlap
      End Routine:
        #if the space button is pressed end this routine
        if key_resp_3.keys =='space':
            instBR_drift_sess1.finished=True
  Routine binRiv
    TextComponent reminder
      letterHeight = 0.03
      pos = (.3, .3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      units = height
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      text:
        Remember:
        ‘left’ = radial
        ‘right’ = bull’s eye
        ‘down’ = mix
    KeyboardComponent key_resp_BR
      allowedKeys = 'down','right','left' 
      correctAns = $corr
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      store = all keys
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    ImageComponent border_4
      image [set every repeat] = $checkBorder
      saveStartStop = False
      size [set every repeat] = (brd,brd)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      texture resolution = 512
      units = pix
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    ImageComponent radialEye_BR
      image [set every repeat] = $image_radialEye
      opacity [set every repeat] = $contR
      saveStartStop = False
      size [set every repeat] = (maxVal, maxVal)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      texture resolution = 512
      units = pix
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    ImageComponent bullsEye_BR
      image [set every repeat] = $image_bullsEye
      opacity [set every repeat] = $contB
      saveStartStop = False
      size [set every repeat] = (maxVal, maxVal)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      texture resolution = 512
      units = pix
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    TextComponent fixation_5
      color [set every repeat] = white
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      text = +
      units = height
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  Routine taskInst
    CodeComponent endRoutine
      Code Type = Auto->JS
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      Begin Routine:
        if expInfo['session'] != 'practice':
            contB  = expInfo['previous contrast'] #set image contrast
            contR=1.0
      End Routine:
        #if the space button is pressed end this routine
        if key_resp.keys =='space':
            instDrift.finished=True
    TextComponent taskTextInst
      letterHeight = 0.03
      pos = (0, .1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .1
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      text:
        WELCOME TO THE MAIN TASK:

        Both gratings will be presented simultaneously. They will both continuously drift (example below). Your task is to track the size change of the bull’s eye grating. Most of the time the gratings will look like those in the middle panel below. The fixation cross will turn lime green, this is your cue to respond with the direction of the size change which occurred directly before the cue. Please respond every time. Your response will not be record if the green cross has switched back to white so make sure to respond as soon as you see the green cross. If you are unsure of the direction of the change make your best guess.

        Press ‘up’ if the bull’s eye is taller (see below at the gratings on the right)
        Press ‘right’ if the bull’s eye is wider (see below at the gratings on the left)
    TextComponent taskTextInst2
      letterHeight = 0.03
      pos = (0, -.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .1
      text = Press ‘space’ now to start the experiment
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    KeyboardComponent key_resp
      discard previous = False
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .1
      store = nothing
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    ImageComponent radialEye
      image [set every repeat] = $image_radialEye
      opacity [set every repeat] = $contR
      pos = (0, -180)
      saveStartStop = False
      size = (80,80)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .1
      texture resolution = 512
      units = pix
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    ImageComponent bullseye
      image [set every repeat] = $image_bullsEye
      opacity [set every repeat] = $contB
      pos = (0, -180)
      saveStartStop = False
      size = (80,80)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .1
      texture resolution = 512
      units = pix
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    ImageComponent radialEye_wide
      image [set every repeat] = $image_radialEye
      opacity [set every repeat] = $contR
      pos = (-300, -180)
      saveStartStop = False
      size = (80,80)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .1
      texture resolution = 512
      units = pix
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    ImageComponent bullseye_wide
      image [set every repeat] = $image_bullsEye
      opacity [set every repeat] = $contB
      pos = (-300, -180)
      saveStartStop = False
      size = (80,60)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .1
      texture resolution = 512
      units = pix
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    ImageComponent radialEye_tall
      image [set every repeat] = $image_radialEye
      opacity [set every repeat] = $contR
      pos = (300, -180)
      saveStartStop = False
      size = (80,80)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .1
      texture resolution = 512
      units = pix
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    ImageComponent bullseye_tall
      image [set every repeat] = $image_bullsEye
      opacity [set every repeat] = $contB
      pos = (300, -180)
      saveStartStop = False
      size = (60,80)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .1
      texture resolution = 512
      units = pix
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  Routine blockSetUp
    CodeComponent calcImgSize
      Code Type = Auto->JS
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      Begin Routine:
        imgSizeCm = 2 * dist2screen * tan(.5*desiredVisAngl)
        #set at beginning of routine since this is calculated in prev routines
    CodeComponent initParams
      Code Type = Auto->JS
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      Begin Experiment:
        # initialize parameters
        corrAns  = 'none' #correct answer
        whichTrial = "" #tracks if the current trial is tall/wide
        indWrng = 0 #initialize the index for wrong responses to stop weird pavlovia glitch
        totTrialCount = 0 #Count number of trials
        corrCount =0 #counter of correct answers
        gradDur = 3 #how many images for grad change to occur over
        findx=0 #set current index we are at in the staircase
        thisInd = 0
        blkCount=0
        brd = 148 #size of border in pix
        maxVal = 80
        minVal = maxVal
        this_AR = maxVal
        initStep = 4 # initial change in px
        finChanges = [] #empty list for final sizes displayed
        stairSteps =[] #empty list for the changes in size
        ##Make the list of the staircase steps
        #multiply each by a set change to create a list of size changes that
        #get smaller and smaller in the difference
        stairSteps.append(initStep) #add initial step
        for i in range(14):
            initStep = initStep*0.87
            stairSteps.append(initStep)
        #define params for moving cue icons
        currPos = 0 #starting position
        change = .2 # the change of cross icon
        currRatio = '' #store curr response
        cueColor = 'black' #display or not
        cueChngColor = 'black' #display or not
        respList = []
      Begin Routine:
        constSize=imgSizeCm*pxPerCm #set the calculated size to a new varibale
        #WARNING: when the images are generated the actual aespect ratio we want
        #is 20 px, but b/c we need background so the opacity is consistent when the image is
        # stretch we will add another 20 px to both images
        minVal =constSize#maximum aspect ratio
        maxVal = constSize+30 #minimum aspect ratio
        finChanges = [] #empty list for final sizes displayed
        #reset staircase every 4 blocks
        #if blkCount%3==0:
        #    thisInd = 0
        #   this_AR=minVal #current size of changing stim in staircase
                                    #this is manipulated in the staircase
        #simulate np.zeros()
        for i in range(len(stairSteps)):
            finChanges.append(0)
        # create a list of the final sizes which takes the actual size
        #of the stimuli and adds the changes created in stairSteps
        for i in range(len(stairSteps)):
            #so there is no index error, for the first value add the maxVal
            if i == 0:
                finChanges[i] = minVal
            else:  #for all other values take the previous value and add the size change
                      #i.e the second value is (maxVal + stairSteps[0])
                finChanges[i] = finChanges[i-1] + stairSteps[i-1]
        #set the initial size and index
        if thisInd == 0:
            currSize = finChanges[0] #the current size based on where i the final list we are
        #finalize border size
        brd = (constSize+45) + 40 #the max the image can stretch + extra pix to avoid overlap
  Routine trial1Const
    KeyboardComponent key_resp_const_trial1
      allowedKeys = 'up','right'
      correctAns = $corr
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
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    ImageComponent border
      image [set every repeat] = $checkBorder
      saveStartStop = False
      size [set every repeat] = (brd,brd)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      texture resolution = 512
      units = pix
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    ImageComponent radialEye_stim_const_trial1
      image [set every repeat] = $image_radialEye
      opacity [set every repeat] = $contR
      size [set every repeat] = (imgSizeCm*pxPerCm+30,imgSizeCm*pxPerCm+30)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      texture resolution = 512
      units = pix
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    ImageComponent bullseye_stim_const_trial1
      image [set every repeat] = $image_bullsEye
      opacity [set every repeat] = $contB
      size [set every repeat] = (imgSizeCm*pxPerCm+30,imgSizeCm*pxPerCm+30)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      texture resolution = 512
      units = pix
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    TextComponent fixation_6
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      text = +
      units = height
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    TextComponent Instruction_4
      letterHeight = 0.03
      pos = (.3, .3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      units = height
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      text:
        Remember:

        Press ‘Up’ =Taller
        Press ‘Right’ = Wider
    PolygonComponent tallResp
      fillColor = white
      pos = (-.3, -.3)
      shape = circle
      size = (0.05, 0.1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
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    PolygonComponent wideResp
      fillColor = white
      pos = (.3, -.3)
      shape = circle
      size = (0.1, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
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  Routine trialSetUp
    CodeComponent setUp
      Code Type = Auto->JS
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      Begin Experiment:
        thisBlkTrialCount = 0
      Begin Routine:
        #flip a coin to see if  trial will be tall_wide
        #if > 0.5 it will be a tall trial if <0.5 it will be a wide trial
        tall_wide = random()
        while tall_wide ==0.5:
            tall_wide = random()
        #set new trial type
        if tall_wide >0.5: #tall trial
            newW = finChanges[thisInd] #shrink width for illusion of vertical oval
            newH=maxVal
            currSize = newW
        else: #wide trial
            newH =  finChanges[thisInd] #shrink height for illusion of vertical oval
            newW=maxVal
            currSize = newH
        # set up the correct answer based on the trial type
        if newW<maxVal: #tall trial
            corrAns = 'up'
            wrongAns ='right'
        elif newH<maxVal: #wide trial
            corrAns = 'right'
            wrongAns ='up'
        #set up parameters that reset every trial
        keypresses=[] #empty list that will store every key press
        rtList =[]#empty list for reaction times
        resp = '' #empty string set to the key press used

        #set up the size of the gradual change based on the
        #number of images in image_list.csv
        gradH = maxVal #reset gradual variables
        gradW=gradH
        gradSize=0 #initilize varible that will determine the absolute difference between
                            #the minVal and the current size
        if newH <maxVal: #if its a wide trial
            gradSize= abs(newH-maxVal)/gradDur
        if newW < maxVal: #if its a tall trial
             gradSize= abs(newW-maxVal)/gradDur

        #set up a random number of repetition for the
        #constant trial so a tall/wide trial occurs randomly
        #between 3s to 10 s. Used in the loop of constTrial
        reps = randint(3, finalTrialDur) #make sure it is at least 3s or
                                            #it will not record the responses
                                            #set in constTrial

        #record what type of trial we are in
        if newH <maxVal:
            whichTrial = "wide trial"
        if newW< maxVal:
            whichTrial = "tall trial"

        #record the total trial count
        totTrialCount += 1
    CodeComponent defCueCol
      Code Type = Auto->JS
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      Begin Experiment:
        cueColor = 'black'
        cueChngColor = 'black'
      Begin Routine:
        #flip a coin if 0 then don't display response cues
        #if 1 then display the response cues
        currPos = 0
        cueTime = random()
        while cueTime ==0.5:
            cueTime = random()

        cueTxt = str(cueTime)

        if cueTime < 0.5:
            cueColor = 'black'
            cueChngColor = 'black'
        else:
            cueColor = 'white'
            cueChngColor ='green'
  Routine gradDec
    CodeComponent gradDecHorW
      Code Type = Auto->JS
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      Begin Experiment:
        tcount_1=0 #increase count with each image
                            #loop.thisN doesn't work in pavlovia
      Begin Routine:
        #change height/width after each image
        #start to gradually change the middle 3 images
        # so that the last 3 images are the final size change
        if tcount_1 > (nFrames-(gradDur*2)): #starting on 4th frame
            if newH <maxVal: #if its a wide trial
                gradH -=gradSize
                if tcount_1 > nFrames-(gradDur):
                    gradH=newH
            if newW<maxVal: #if its a tall trial
                 gradW-= gradSize
                 if tcount_1 > nFrames-(gradDur):
                    gradW=newW
      Each Frame:
        #check for any key press
        keys=event.getKeys()
        #move the cue icon based on the key responses
        if len(keys):
            if 'right' in keys:
                currPos = currPos + change
                if currPos > 0.2:
                   currPos=0.2
            elif 'left' in keys:
                currPos = currPos - change
                if currPos < - 0.2:
                   currPos= - 0.2
            if 'space' in keys:
                if currPos >0:
                    currRatio = 'wide'
                elif currPos <0:
                    currRatio = 'tall'
                else:
                    currRatio = 'noChange'
                respList.append(currRatio)
      End Routine:
        tcount_1+=1
        #store everything
        if tcount_1 > (nFrames-(gradDur*2)):
            #store all key presses in list
            keypresses.append(gradDecResp.keys)
            #store the reaction time for those keypresses
            rtList.append(gradDecResp.rt)
    KeyboardComponent gradDecResp
      allowedKeys = 'right','up'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
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    ImageComponent border_2
      image [set every repeat] = $checkBorder
      saveStartStop = False
      size [set every repeat] = (brd,brd)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      texture resolution = 512
      units = pix
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    ImageComponent radialEye_change
      image [set every repeat] = $image_radialEye
      opacity [set every repeat] = $contR
      saveStartStop = False
      size [set every repeat] = (maxVal, maxVal)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      texture resolution = 512
      units = pix
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    ImageComponent bullsEye_gradChange
      image [set every repeat] = $image_bullsEye
      opacity [set every repeat] = $contB
      saveStartStop = False
      size [set every repeat] = (gradW, gradH)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      texture resolution = 512
      units = pix
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    TextComponent fixation
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      text = +
      units = height
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    TextComponent Instruction
      letterHeight = 0.03
      pos = (.3, .3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      units = height
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      text:
        Remember:

        Press ‘Up’ =Taller
        Press ‘Right’ = Wider
    PolygonComponent tallMarker_2
      fillColor [set every frame] = $cueColor
      lineColor [set every frame] = $cueColor
      pos = (-.2, -.2)
      saveStartStop = False
      shape = circle
      size = (0.01, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      units = height
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    PolygonComponent wideMarker_2
      fillColor [set every frame] = $cueColor
      lineColor [set every frame] = $cueColor
      pos = (.2, -.2)
      saveStartStop = False
      shape = circle
      size = (0.05, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      units = height
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    PolygonComponent noChangeMarker_2
      fillColor [set every repeat] = $cueColor
      lineColor [set every repeat] = $cueColor
      pos = (0,-.2)
      saveStartStop = False
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      units = height
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    PolygonComponent currChange_2
      fillColor [set every repeat] = $cueChngColor
      lineColor [set every repeat] = $cueChngColor
      lineWidth = .05
      pos [set every frame] = (currPos, -.2)
      saveStartStop = False
      shape = cross
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      units = height
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  Routine gradInc
    CodeComponent gradIncHorW
      Code Type = Auto->JS
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      Begin Experiment:
        tcount_2=0 #increase count with each image
                            #loop.thisN doesn't work in pavlovia
      Begin Routine:
        #change height/width, gradually change the last 3 images
        # so that the first images are the final change size
        if tcount_2 > (nFrames-gradDur):
            if newH <maxVal:#if its a wide trial
                gradH +=gradSize
                if gradH >maxVal:
                        gradH=maxVal
            if newW <maxVal: #if its a tall trial
                 gradW+=gradSize
                 if gradW > maxVal:
                        gradW=maxVal
      Each Frame:
        #check for any key press
        keys=event.getKeys()
        #move the cue icon based on the key responses
        if len(keys):
            if 'right' in keys:
                currPos = currPos + change
                if currPos > 0.2:
                   currPos=0.2
            elif 'left' in keys:
                currPos = currPos - change
                if currPos < - 0.2:
                   currPos= - 0.2
            if 'space' in keys:
                if currPos >0:
                    currRatio = 'wide'
                elif currPos <0:
                    currRatio = 'tall'
                else:
                    currRatio = 'noChange'
                respList.append(currRatio)
      End Routine:
        tcount_2+=1
        #store key presses in list
        keypresses.append(gradIncResp.keys)
        #store reaction times in list
        rtList.append(gradIncResp.rt)
    KeyboardComponent gradIncResp
      allowedKeys = 'right','up'
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
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    ImageComponent border_3
      image [set every repeat] = $checkBorder
      saveStartStop = False
      size [set every repeat] = (brd,brd)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      texture resolution = 512
      units = pix
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    ImageComponent radialEye_change_3
      image [set every repeat] = $image_radialEye
      opacity [set every repeat] = $contR
      saveStartStop = False
      size [set every repeat] = (maxVal, maxVal)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      texture resolution = 512
      units = pix
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    ImageComponent bullsEye_gradChange_3
      image [set every repeat] = $image_bullsEye
      opacity [set every repeat] = $contB
      saveStartStop = False
      size [set every repeat] = (gradW, gradH)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      texture resolution = 512
      units = pix
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    TextComponent fixation_3
      letterHeight = 0.025
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      text = +
      units = height
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    TextComponent Instruction_3
      letterHeight = 0.03
      pos = (.3, .3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      units = height
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      text:
        Remember:

        Press ‘Up’ =Taller
        Press ‘Right’ = Wider
    PolygonComponent tallMarker_3
      fillColor [set every frame] = $cueColor
      lineColor [set every frame] = $cueColor
      pos = (-.2, -.2)
      saveStartStop = False
      shape = circle
      size = (0.01, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      units = height
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    PolygonComponent wideMarker_3
      fillColor [set every frame] = $cueColor
      lineColor [set every frame] = $cueColor
      pos = (.2, -.2)
      saveStartStop = False
      shape = circle
      size = (0.05, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      units = height
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    PolygonComponent noChangeMarker_3
      fillColor [set every repeat] = $cueColor
      lineColor [set every repeat] = $cueColor
      pos = (0,-.2)
      saveStartStop = False
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      units = height
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    PolygonComponent currChange_3
      fillColor [set every repeat] = $cueChngColor
      lineColor [set every repeat] = $cueChngColor
      lineWidth = .05
      pos [set every frame] = (currPos, -.2)
      saveStartStop = False
      shape = cross
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      units = height
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  Routine changeDir
    CodeComponent chageDir
      Code Type = Auto->JS
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      Begin Routine:
        #change direction of drift
        direction = random()
        driftLs = list(range((nFrames+1)*2))
        if direction >0.5:
            driftrows= driftLs[:(nFrames+1)]
        else:
            driftrows = driftLs[(nFrames+1):]
  Routine trialConst
    CodeComponent storeResp
      Code Type = Auto->JS
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      Begin Experiment:
        tcount_3=0 #increase count with each image
                            #loop.thisN doesn't work in pavlovia
        col = 'white' #change color of fix-cross to initialize when to respond
        hght= .025 #change size of fix-cross to initialize when to respond
      Each Frame:
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      End Routine:
        tcount_3+=1
        #only record if in two seconds of const trial
        if tcount_3 <((nFrames+1)*2):
            #store key press in list
            keypresses.append(constResp.keys)
            rtList.append(constResp.rt)
    KeyboardComponent constResp
      allowedKeys = 'up','right'
      correctAns = $corr
      discard previous = False
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
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    ImageComponent border_6
      image [set every repeat] = $checkBorder
      saveStartStop = False
      size [set every repeat] = (brd,brd)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      texture resolution = 512
      units = pix
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    ImageComponent radialEye_stim_const
      image [set every repeat] = $image_radialEye
      opacity [set every repeat] = $contR
      saveStartStop = False
      size [set every repeat] = (maxVal, maxVal)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      texture resolution = 512
      units = pix
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    ImageComponent bullsEye_stim_const
      image [set every repeat] = $image_bullsEye
      opacity [set every repeat] = $contB
      saveStartStop = False
      size [set every repeat] = (maxVal, maxVal)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      texture resolution = 512
      units = pix
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    TextComponent fixation_4
      color [set every repeat] = $col
      letterHeight [set every repeat] = $hght
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      text = +
      units = height
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    TextComponent Instruction_5
      letterHeight = 0.03
      pos = (.3, .3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      units = height
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      text:
        Remember:

        Press ‘Up’ =Taller
        Press ‘Right’ = Wider
    PolygonComponent tallMarker_4
      fillColor [set every frame] = $cueColor
      lineColor [set every frame] = $cueColor
      pos = (-.2, -.2)
      saveStartStop = False
      shape = circle
      size = (0.01, 0.05)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      units = height
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    PolygonComponent wideMarker_4
      fillColor [set every frame] = $cueColor
      lineColor [set every frame] = $cueColor
      pos = (.2, -.2)
      saveStartStop = False
      shape = circle
      size = (0.05, 0.01)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      units = height
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    PolygonComponent noChangeMarker_4
      fillColor [set every repeat] = $cueColor
      lineColor [set every repeat] = $cueColor
      pos = (0,-.2)
      saveStartStop = False
      shape = circle
      size = (0.03, 0.03)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      units = height
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    PolygonComponent currChange_4
      fillColor [set every repeat] = $cueChngColor
      lineColor [set every repeat] = $cueChngColor
      lineWidth = .05
      pos [set every frame] = (currPos, -.2)
      saveStartStop = False
      shape = cross
      size = (0.02, 0.02)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .125
      units = height
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  Routine nextTrial
    CodeComponent staircase
      Code Type = Auto->JS
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      Begin Routine:
        #if the wrongAns is in the list of keypresses then define the index of the wrongAns
        if wrongAns in keypresses:
            indWrng = keypresses.index(wrongAns)
      End Routine:
        # save information to output file
        trials.addData('corrAns', corrAns)
        trials.addData('allKeyResp', keypresses)
        trials.addData('bullsContrast', contB)
        trials.addData('radialContrast', contR)
        trials.addData('allKeyRT', rtList)
        trials.addData('whichTrial', whichTrial)
        trials.addData('tall_wide', tall_wide)
        trials.addData('totalTrialCount',totTrialCount)
        trials.addData('respList',respList)
        ####START STAIRCASE####
        #find where in the size array we are currently
        findx =finChanges.index(currSize)
        #check if the response is correct and the wrongAns is not in keypresses
        if corrAns in keypresses and wrongAns not in keypresses:
            currAns = corrAns #current answer is correct
            indCorr = keypresses.index(corrAns) #index of correct keypress
            currRT = rtList[indCorr] #RT for that keypress
        #check if both keys were pressed
        elif wrongAns and corrAns in keypresses:
            #find index of correct and wrong ans
            indCorr = keypresses.index(corrAns)
            indWrng = keypresses.index(wrongAns)
            #if the wrong key was pressed before the right key
            #and there was less than 300ms difference in presses
            #mark the response as correct
            if indWrng <indCorr and (indCorr-indWrng)<4:
                currAns=corrAns
                currRT = rtList[indCorr]
        #check if press is a wrong answer
        else:
            if wrongAns not in keypresses: #if nothing was pressed for this trial
                currAns='none'
                currRT = 0
            else: #if the wrongAns was pressed for this trial
                currAns=wrongAns
                indWrng = keypresses.index(wrongAns)
                currRT = rtList[indWrng]
        # use the currAns to manipulate the staircase
        if currAns == corrAns:
            corrCount +=1 #increase counter
            if corrCount%2==0: #if there were two corrAns make staircase harder
                #if you are at the end of the array stay there
                if currSize == finChanges[-1]:
                    this_AR = currSize
                    thisInd = (len(finChanges)-1)
                else:
                    #move down to the next step size
                    currSize = finChanges[findx+1]
                    this_AR = currSize
                    thisInd = findx+1
        else: #make staircase easier
            corrCount = 0 #reset the counter since the answer was wrong
            #if at the beginning of the array stay there
            if currSize == finChanges[0]:
                this_AR = currSize
                thisInd = 0
            else:
                #move down to the next step size
                currSize = finChanges[findx-1]
                this_AR = currSize
                thisInd = findx-1
        ####PREPARE FOR NEXT TRIAL####
        tcount_1=tcount_2=tcount_3=0
        #record the staircase behavior for easier analysis
        trials.addData('resp', currAns)
        trials.addData('rt', currRT)
        trials.addData('thisInd',thisInd)
        trials.addData('currSize', currSize)
  Routine endBlock
    CodeComponent countBlocks
      Code Type = Auto->JS
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      Begin Experiment:
        txtVar =''
      Begin Routine:
        blkCount+=1
        txtVar = 'You completed ' + blkCount + ' of '+ blockReps + ' blocks'
      End Routine:
        if nextTrialResp.keys == 'right':
            numReps = 0
        else:
            numReps =1
    KeyboardComponent nextTrialResp
      allowedKeys = 'space','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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    TextComponent endblockInst
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Take a short 2 minute break if necessary. You may remove your glasses during this break.

        Make sure you put on your glasses before starting again.

        If you move your current position please press ‘space’ once your break ends.
    TextComponent whichBlock
      letterHeight = 0.03
      pos = (0, .2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $txtVar
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Flow
  Routine contWarning
  Routine findScreenResol
  LoopInitiator screenEdgeLoop loopType="TrialHandler"
    loopType = random
    nReps = 50
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    Routine findScreenEdge
    Routine checkScreenEdge
  LoopTerminator screenEdgeLoop
  LoopInitiator outerLoop loopType="TrialHandler"
    loopType = random
    nReps = 20
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    LoopInitiator midLoop loopType="TrialHandler"
      loopType = random
      nReps = 50
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      Routine startBlindSpot
      LoopInitiator inLoop loopType="TrialHandler"
        loopType = sequential
        nReps = num_repeat
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        Routine findBlindSpot
        Routine checkForRestart
      LoopTerminator inLoop
    LoopTerminator midLoop
    Routine warning
  LoopTerminator outerLoop
  Routine goodJob_prepForExp
  LoopInitiator contAveraging loopType="TrialHandler"
    loopType = sequential
    nReps = skipContrast
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    LoopInitiator contTrials loopType="TrialHandler"
      loopType = sequential
      nReps = contrastTrials
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      LoopInitiator redoContAdj loopType="TrialHandler"
        conditionsFile = $fileCSV
        isTrials = False
        loopType = random
        nReps = 10
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        Routine instContrast
        LoopInitiator adjustContrast loopType="TrialHandler"
          Selected rows = 1
          conditionsFile = $fileCSV
          isTrials = False
          loopType = random
          nReps = 1000
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          Routine gratingContrast
          Routine gratingCode
        LoopTerminator adjustContrast
        Routine bothContrast
      LoopTerminator redoContAdj
      Routine contrastTrials
    LoopTerminator contTrials
    Routine finalCont
  LoopTerminator contAveraging
  LoopInitiator defineEye loopType="TrialHandler"
    loopType = random
    nReps = eyeDom
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    LoopInitiator instBR_drift_sess1 loopType="TrialHandler"
      Selected rows = :8
      conditionsFile = $fileCSV
      isTrials = False
      loopType = sequential
      nReps = 1000
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      Routine binRivInst_sess1
    LoopTerminator instBR_drift_sess1
    LoopInitiator binRiv_trials_sess1 loopType="TrialHandler"
      loopType = sequential
      nReps = 5
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      LoopInitiator drift_BR_sess1 loopType="TrialHandler"
        Selected rows = $driftrows
        conditionsFile = $fileCSV
        loopType = sequential
        nReps = 6
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        Routine binRiv
      LoopTerminator drift_BR_sess1
    LoopTerminator binRiv_trials_sess1
  LoopTerminator defineEye
  Routine blockSetUp
  LoopInitiator t1Drift loopType="TrialHandler"
    Selected rows = $driftrows
    conditionsFile = $fileCSV
    isTrials = False
    loopType = sequential
    nReps = 1
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    Routine trial1Const
  LoopTerminator t1Drift
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = trialReps
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    Routine trialSetUp
    LoopInitiator decDrift loopType="TrialHandler"
      Selected rows = $driftrows
      conditionsFile = $fileCSV
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine gradDec
    LoopTerminator decDrift
    LoopInitiator incDrift loopType="TrialHandler"
      Selected rows = $driftrows
      conditionsFile = $fileCSV
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine gradInc
    LoopTerminator incDrift
    Routine changeDir
    LoopInitiator constDrift loopType="TrialHandler"
      Selected rows = $driftrows
      conditionsFile = $fileCSV
      isTrials = False
      loopType = sequential
      nReps = 1
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      Routine trialConst
    LoopTerminator constDrift
    Routine nextTrial
  LoopTerminator trials
  Routine endBlock
